PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = final design
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
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    ImageComponent image
      image [set every repeat] = $path
      size = (1920, 1080)
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = 0.8
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = 'a','s'
      forceEndRoutine = True
      startVal [time (s)] = 0.4
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/Shaha/Desktop/uni/lab in psy/INDIVIDUAL ASSIGNMENT/cond.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'path': 'C:\\Users\\Shaha\\Desktop\\final pics\\1', 'context': 'f', 'intensity': 'l'},
      {'path': 'C:\\Users\\Shaha\\Desktop\\final pics\\2', 'context': 'f', 'intensity': 'm'},
      {'path': 'C:\\Users\\Shaha\\Desktop\\final pics\\3', 'context': 'f', 'intensity': 'h'},
      {'path': 'C:\\Users\\Shaha\\Desktop\\final pics\\4', 'context': 'f', 'intensity': 'l'},
      {'path': 'C:\\Users\\Shaha\\Desktop\\final pics\\5', 'context': 'f', 'intensity': 'm'},
      {'path': 'C:\\Users\\Shaha\\Desktop\\final pics\\6', 'context': 'f', 'intensity': 'h'},
      {'path': 'C:\\Users\\Shaha\\Desktop\\final pics\\7', 'context': 'f', 'intensity': 'l'},
      {'path': 'C:\\Users\\Shaha\\Desktop\\final pics\\8', 'context': 'f', 'intensity': 'm'},
      {'path': 'C:\\Users\\Shaha\\Desktop\\final pics\\9', 'context': 'f', 'intensity': 'h'},
      {'path': 'C:\\Users\\Shaha\\Desktop\\final pics\\10', 'context': 'f', 'intensity': 'l'},
      {'path': 'C:\\Users\\Shaha\\Desktop\\final pics\\11', 'context': 'f', 'intensity': 'm'},
      {'path': 'C:\\Users\\Shaha\\Desktop\\final pics\\12', 'context': 'f', 'intensity': 'h'},
      {'path': 'C:\\Users\\Shaha\\Desktop\\final pics\\13', 'context': 'f', 'intensity': 'l'},
      {'path': 'C:\\Users\\Shaha\\Desktop\\final pics\\14', 'context': 'f', 'intensity': 'm'},
      {'path': 'C:\\Users\\Shaha\\Desktop\\final pics\\15', 'context': 'f', 'intensity': 'h'},
      {'path': 'C:\\Users\\Shaha\\Desktop\\final pics\\16', 'context': 'f', 'intensity': 'l'},
      {'path': 'C:\\Users\\Shaha\\Desktop\\final pics\\17', 'context': 'f', 'intensity': 'm'}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
    Routine trial
  LoopTerminator trials
